'################################################

'## Description #################################
'Test code to parse CommsMemFree in Status Table
'
'################################################


'## Configuration ###############################
PipeLineMode

'## Declarations ################################
Const FREQ_REJECTION = _60HZ
Const CR = CHR(13)
Const LF = CHR(10)
Const CRLF = CHR(13) & CHR(10)

'################################################
Public panel_temp As Float
Public bat_voltage As Float
Dim core_last_status As Long

Public cmf_01(10) As Long
Public cmf_02_keep_used As Long
Public cmf_03(6) As Long

Alias cmf_01(1) = cmf_01_tny_used
Alias cmf_01(2) = cmf_01_tny_free
Alias cmf_01(3) = cmf_01_lil_used
Alias cmf_01(4) = cmf_01_lil_free
Alias cmf_01(5) = cmf_01_med_used
Alias cmf_01(6) = cmf_01_med_free
Alias cmf_01(7) = cmf_01_lrg_used
Alias cmf_01(8) = cmf_01_lrg_free
Alias cmf_01(9) = cmf_01_hug_used
Alias cmf_01(10) = cmf_01_hug_free
Alias cmf_03(1) = cmf_03_lil_que_used
Alias cmf_03(2) = cmf_03_lil_que_free
Alias cmf_03(3) = cmf_03_big_que_used
Alias cmf_03(4) = cmf_03_big_que_free
Alias cmf_03(5) = cmf_03_rx_que
Alias cmf_03(6) = cmf_03_tx_que

Units panel_temp = C
Units bat_voltage = Vdc

'################################################


'## Functions ###################################
Function parseCommsMemFree()
' test parameters to verify the parsing is working
' Function parseCommsMemFree(commmemfree01 As Long, commmemfree03 As Long)
  Dim buffer_lng As Long

  'cmf_01_default Array Index Description = {tny, lil, med, lrg, hug}
  Dim cmf_01_default(5) As Long = {160, 99, 99, 30, 2}
  Alias cmf_01_default(1) = cmf_01_tny_reset
  Alias cmf_01_default(2) = cmf_01_lil_reset
  Alias cmf_01_default(3) = cmf_01_med_reset
  Alias cmf_01_default(4) = cmf_01_lrg_reset
  Alias cmf_01_default(5) = cmf_01_hug_reset

  'cmf_03_default Array Index Description = {lil ip que, big ip que, rx que, tx que}
  Dim cmf_03_default(2) As Long = {30, 15}
  Alias cmf_03_default(1) = cmf_03_lil_ip_que_reset
  Alias cmf_03_default(2) = cmf_03_big_ip_que_reset

  'Convert CommsMemFree(1) to a string
  buffer_lng = Status.CommsMemFree(1)

  ' test parameters to verify the parsing is working
  ' buffer_lng = commmemfree01

  cmf_01_tny_free = buffer_lng MOD 100
  cmf_01_lil_free = (buffer_lng / 100) MOD 100
  cmf_01_med_free = (buffer_lng / 10000) MOD 100
  cmf_01_lrg_free = (buffer_lng / 1000000) MOD 100
  cmf_01_hug_free = (buffer_lng / 100000000) MOD 100

  cmf_01_tny_used = cmf_01_tny_reset - cmf_01_tny_free
  cmf_01_lil_used = cmf_01_lil_reset - cmf_01_lil_free
  cmf_01_med_used = cmf_01_med_reset - cmf_01_med_free
  cmf_01_lrg_used = cmf_01_lrg_reset - cmf_01_lrg_free
  cmf_01_hug_used = cmf_01_hug_reset - cmf_01_hug_free

  cmf_02_keep_used = Status.CommsMemFree(2)

  buffer_lng = Status.CommsMemFree(3)
    ' test parameters to verify the parsing is working
  ' buffer_lng = commmemfree03

  cmf_03_lil_que_free = buffer_lng MOD 100
  cmf_03_big_que_free = (buffer_lng / 100) MOD 100
  cmf_03_rx_que = (buffer_lng / 10000) MOD 100
  cmf_03_tx_que = (buffer_lng / 1000000) MOD 100

  cmf_03_lil_que_used = cmf_03_lil_ip_que_reset - cmf_03_lil_que_free
  cmf_03_big_que_used = cmf_03_big_ip_que_reset - cmf_03_big_que_free

EndFunction 'parseCommsMemFree
'################################################


'## Main Program ################################
BeginProg
  Scan(6, SEC, 3, 0)
    PanelTemp(panel_temp, FREQ_REJECTION)
    Battery(bat_voltage)

    ' test parameters to verify the parsing is working
    ' parseCommsMemFree(228968437, 21428)
    parseCommsMemFree()
  NextScan
EndProg
